PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word pair visual
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The words will be displayed now. 
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  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text [set every repeat]:
        $str(Word1) + "-" + str(Word2)
  Routine distractor
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      text = "You will see different shapes. After each shape, type the letter that the shape starts with (e.g., 'S' for Square)."
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  Routine distractor_task
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    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 13.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_3
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 29.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_5
      fillColor = white
      shape = star7
      size = (0.5, 0.5)
      startVal [time (s)] = 38.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = "You will now be shown certain shapes. The shapes will be displayed for 3 seconds, after which you have to type the first letter that the shape starts with under 5 seconds."
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 5.0
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 15.0
      stopVal [duration (s)] = 5.0
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 24.0
      stopVal [duration (s)] = 5.0
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    TextboxComponent textbox_5
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 41.0
      stopVal [duration (s)] = 5.0
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 32.0
      stopVal [duration (s)] = 5.0
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  Routine recall_instruction
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    TextComponent instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text = You will now be presented one word from the pair. Please type in the second word from that pair. Press the space bar after your input so that the next word can appear. 
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  Routine recall_task
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent word_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(Word1)
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    TextboxComponent textbox_6
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine introduction
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    TextComponent instruction_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment! You will be presented with a list of word pairs, and your task is to use your imagination and visualise an assosciation between the pair to remember them. Each word pair will be displayed for 5 seconds. You will then be asked to solve a task, and then recall the words you had memorised.
        Please click the space bar when you have read the instructions and are ready to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introduction
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/tiadoshi/Desktop/words_pairs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word1', 'Lamp'), ('Word2', 'Chair'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Car'), ('Word2', 'House'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Table'), ('Word2', 'Book'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Tree'), ('Word2', 'Flower'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Phone'), ('Word2', 'Pen'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Desk'), ('Word2', 'Computer'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Freedom'), ('Word2', 'Society'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Equality'), ('Word2', 'Justice'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Love'), ('Word2', 'Hate'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Time'), ('Word2', 'Reason'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Thought'), ('Word2', 'Perspective'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Emotion'), ('Word2', 'Concept'), ('Condition', 'Abstract')])]
    Routine trial
  LoopTerminator trials
  Routine distractor
  Routine distractor_task
  Routine recall_instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/tiadoshi/Desktop/words_pairs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word1', 'Lamp'), ('Word2', 'Chair'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Car'), ('Word2', 'House'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Table'), ('Word2', 'Book'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Tree'), ('Word2', 'Flower'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Phone'), ('Word2', 'Pen'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Desk'), ('Word2', 'Computer'), ('Condition', 'Concrete')]),
      OrderedDict([('Word1', 'Freedom'), ('Word2', 'Society'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Equality'), ('Word2', 'Justice'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Love'), ('Word2', 'Hate'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Time'), ('Word2', 'Reason'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Thought'), ('Word2', 'Perspective'), ('Condition', 'Abstract')]),
      OrderedDict([('Word1', 'Emotion'), ('Word2', 'Concept'), ('Condition', 'Abstract')])]
    Routine recall_task
  LoopTerminator trials_2
